PsychoPy2experiment version="3.0.5"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1680, 1050]
  color = Black
  expName = Experiment
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Routines
  Routine Outro
    TextComponent Outro_text
      letterHeight = .1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = This concludes the experiment.
      wrapWidth = 10
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  Routine Intro
    TextComponent Intro_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Listen or watch for what is being said.

        Select the option that best fits the stimulus.
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 3
      stopVal [duration (s)] = 3
      wrapWidth = 10
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      text:
        Press b if the speaker says "BA".
        Press d if the speaker says "DA".
        Press g if the speaker says "GA".
  Routine Audio_Tuning
    CodeComponent Audio_test
      Code Type = Py
      Begin Experiment:
        debug = False
      Begin Routine:
        from psychopy import core

        ## Setup Section
        textString = "Audio_test goes here"
        message = visual.TextStim(win, text=textString)

        ## Experiment Section
        message.draw()
        win.flip()

        core.wait(2.5)
  Routine Video_Tuning
    CodeComponent Video_test
      Code Type = Py
      Begin Experiment:
        debug = False
        accuracy = 0
        target_accuracy = .5
        noise_level = 0

        ba = []
        da = []
        ga = []
      Begin Routine:
        from psychopy import core

        ## Setup Section
        video_stimulus.setMovie("pop.mov")

        ## Experiment Section
        # Play the video
        while True:
            video_stimulus.seek(0)
            video_stimulus.play()
            while video_stimulus.status != visual.FINISHED:
                video_stimulus.draw()
                win.flip()
            # Get response
            prompt.draw()
            win.flip()
            c = event.waitKeys() # read a character
            if c[0] == 'y':
                noise_level += 1
                accuracy += 1
            elif c[0] == 'space':
                break
            else:
                noise_level -= 1

        message = visual.TextStim(win, text="Accuracy: {}\nNoise_level: {}".format(accuracy, noise_level))
        message.draw()
        win.flip()

        core.wait(3)
      End Routine:
        print(accuracy, noise_level)
    MovieComponent video_stimulus
      No audio = True
      backend = moviepy
      forceEndRoutine = False
      movie = pop.mov
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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    TextComponent prompt
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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      text:
        What was said:
        BA, DA, or GA?
        Press B, D, or G.
Flow
  Routine Intro
  Routine Video_Tuning
  Routine Audio_Tuning
  Routine Outro
